PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'Group': '', 'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['EXP_DATA\\Arrows\\Cutout.png', 'EXP_DATA\\Arrows\\Full.png', 'EXP_DATA\\Conditions\\SNA\\con1.xlsx', 'EXP_DATA\\Conditions\\SNA\\con2.xlsx', 'EXP_DATA\\Conditions\\SNA\\con3.xlsx', 'EXP_DATA\\Conditions\\SNA\\con4.xlsx', 'EXP_DATA\\Instructions\\Inst_Image\\4\\1.JPG', 'EXP_DATA\\Instructions\\Inst_Image\\4\\2.JPG', 'EXP_DATA\\Instructions\\Inst_Image\\4\\3.JPG', 'EXP_DATA\\Instructions\\Inst_Image\\3\\1.JPG', 'EXP_DATA\\Instructions\\Inst_Image\\3\\2.JPG', 'EXP_DATA\\Instructions\\Inst_Image\\3\\3.JPG', 'EXP_DATA\\Instructions\\Inst_Image\\2\\1.JPG', 'EXP_DATA\\Instructions\\Inst_Image\\2\\2.JPG', 'EXP_DATA\\Instructions\\Inst_Image\\2\\3.JPG', 'EXP_DATA\\Instructions\\Inst_Image\\1\\1.JPG', 'EXP_DATA\\Instructions\\Inst_Image\\1\\2.JPG', 'EXP_DATA\\Instructions\\Inst_Image\\1\\3.JPG', 'EXP_DATA\\Instructions\\Inst_Image\\1.JPG', 'EXP_DATA\\Instructions\\Inst_Image\\2.JPG', 'EXP_DATA\\Instructions\\Inst_Image\\3.JPG', 'EXP_DATA\\Instructions\\Inst_Image\\4.JPG', 'EXP_DATA\\Instructions\\Inst_Image\\5.JPG', 'EXP_DATA\\Instructions\\Inst_Image\\6.JPG', 'EXP_DATA\\Instructions\\Inst_Image\\7.JPG', 'EXP_DATA\\Instructions\\Inst_Image\\8.JPG', 'EXP_DATA\\Instructions\\Inst_Image\\9.JPG', 'EXP_DATA\\Instructions\\Inst_Image\\10.JPG', 'EXP_DATA\\Instructions\\Inst_Image\\11.JPG', 'EXP_DATA\\Arrows\\1`.png', 'EXP_DATA\\Arrows\\2.png', 'EXP_DATA\\Arrows\\Arrow.png', 'EXP_DATA\\Card\\card.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = SNA
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Routines
  Routine ScreenDist_Calc
    TextComponent Wait
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent Cross
      fillColor = black
      shape = cross
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    PolygonComponent Dot
      fillColor = red
      pos = (-0.03, 0)
      shape = circle
      size = (0.025, 0.025)
      startVal [time (s)] = 0
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    CodeComponent code
      Code Type = Both
      Begin Experiment:
        S_lsit = []
      Begin JS Experiment:
        S_lsit = [];
      Begin JS Routine:
        var x;
        var y;

        Cross_Pos = 0;
        Dot_Start_Pos = (- 0.025);
        screenWidth = psychoJS.window.size[0];
        screenHeight = psychoJS.window.size[1];
        Ratio = (screenWidth / screenHeight);
        Dot.setPos([Dot_Start_Pos, 0]);
      Begin Routine:
        Cross_Pos = 0
        Dot_Start_Pos = -0.025
        screenWidth = win.size[0]
        screenHeight = win.size[1]
        Ratio = screenWidth/screenHeight



        Dot.setPos((Dot_Start_Pos, 0))
      Each Frame:
        (x, y) = Dot.pos

        if x < (-Ratio*0.5 + Dot.size[0]*0.5):
           x = Dot_Start_Pos
        else:
           x -= 0.0005

        newPos = (x, y)

        Dot.setPos(newPos)
      Each JS Frame:
        x = Dot.pos[0];
        y = Dot.pos[1];

        if ((x < (((- Ratio) * 0.5) + (Dot.size[0] * 0.5)))) {
            x = Dot_Start_Pos;
        } else {
            x -= 0.0005;
        }
        newPos = [x, y];
        Dot.setPos(newPos);
      End JS Routine:
        S = ((Cross_Pos - (Cross.size[0] * 0.5)) - (x + (Dot.size[0] * 0.5)));
        S_lsit.push(S);
      End Routine:
        S = (Cross_Pos-Cross.size[0]*0.5) - (x + Dot.size[0]*0.5)
        S_lsit.append(S)
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Results
    CodeComponent code_2
      Code Type = Both
      Begin Experiment:
        import math
      Begin JS Routine:
        var w;
        var h;
        var Wcm;

        var dist_text;

        [w, h] = psychoJS.window.size;
        console.log("w: ");
        console.log(w);
        console.log("h: ");
        console.log(h);

        Wcm = ((w / px2mm) / 10);
        Hcm = ((h / px2mm) / 10);
        Wcm = ((w / px2mm) / 10);
        Hcm = ((h / px2mm) / 10);

        console.log('Hcm:', Hcm)
        console.log('Wcm:', Wcm)
        console.log('px2mm:', px2mm)
        console.log('w:', w)
        console.log('h:', h)
        dist_text = (((((((((("Your screen Height is " + Math.round(Hcm).toString()) + " Cm") + "\n") + "Your screen Width is ") + Math.round(Wcm).toString()) + " Cm") + "\n") + "Your screen Resolution is ") + psychoJS.window.size.toString()) + " Pixels");
      Begin Routine:
        (w, h) = win.size
        Wcm = (w/px2mm)/10
        Hcm = (h/px2mm)/10
        dist_text = "Your screen Height is " + str(round(Hcm ,2)) + " Cm" + "\n" + "Your screen Width is " + str(round(Wcm ,2)) + " Cm" + "\n" + "Your screen Resolution is " + str(win.size) + " Pixels"
        #dist_text = (((((((((("Your screen Height is " + rounder(Hcm).toString()) + " Cm") + "\n") + "Your screen Width is ") + rounder(Wcm).toString()) + " Cm") + "\n") + "Your screen Resolution is ") + psychoJS.window.size.toString()) + " Pixels");
        #dist_text = (((((((((("Your screen Height is " + Math.round(Hcm).toString()) + " Cm") + "\n") + "Your screen Width is ") + Math.round(Wcm).toString()) + " Cm") + "\n") + "Your screen Resolution is ") + psychoJS.window.size.toString()) + " Pixels");
        #var Hcm;
      End Routine:
        screen_Prop = Hcm/29.5
        thisExp.addData('screen_Prop', screen_Prop)
    TextComponent Res_text
      letterHeight = 0.025
      startVal [time (s)] = 0.0
      text [set every repeat] = $dist_text
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent Results_Text_Cont
      color = black
      letterHeight = 0.035
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0
      text = לחץ על כל מקש להמשך
      units = height
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    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Experiment:
        Hcm = 0
      End Routine:
        screen_Prop = Hcm/29.5
        thisExp.addData('screen_Prop', screen_Prop)
  Routine Stimuli
    CodeComponent Stimuli_Code
      Code Type = Auto->JS
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      Begin Routine:
        if s_Type == "image":
           image_dur = 2
           text_dur = 0
        if s_Type == "text":
           image_dur = 0
           text_dur = 2
    ImageComponent image_Stim
      durationEstim = 2
      image = EXP_DATA\Arrows\Arrow.png
      ori [set every repeat] = image_ori
      size = (0.125, 0.125)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $image_dur
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    TextComponent text_Stim
      durationEstim = 2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $text_dur
      text [set every repeat] = $text_stimulus
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    KeyboardComponent Corr_Resp
      allowedKeys = 'space'
      correctAns = CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 1.9
      storeCorrect = True
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    KeyboardComponent inCorr_Resp
      allowedKeys = 'space'
      correctAns = _CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 1.9
      storeCorrect = True
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  Routine estimate_screen_size
    ImageComponent card
      image = EXP_DATA\Card\card.png
      saveStartStop = False
      size = (450, (450 * (817 / 1284)))
      startVal [time (s)] = 0.0
      units = pix
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    SliderComponent slider
      fillColor = yellow
      forceEndRoutine = False
      granularity = (0.001)
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styleTweaks = ('triangleMarker',)
      styles = rating
      ticks = (0, 1)
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    CodeComponent resize_card
      Code Type = Both
      Begin JS Routine:
        slider.markerPos = 0.5;
      Begin Routine:
        slider.markerPos = 0.5
      Each Frame:
        if slider.markerPos:
          newW = cardWidthPXMax * slider.markerPos
          newH = newW * cardAspectRatio
          newSize = [newW, newH]
          card.setSize(newSize)
          cardWidthPX = newW
          px2mm = cardWidthPX / cardWidthMM
      Each JS Frame:
        if (slider.markerPos !== undefined) {
          const newW = window.cardWidthPXMax * slider.markerPos;
          const newH = newW * window.cardAspectRatio;

          card.size = [newW, newH];

          window.cardWidthPX = newW;
          window.px2mm = window.cardWidthPX / window.cardWidthMM;
        }
    KeyboardComponent key_resp_2
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine display_istuctions
    TextComponent text
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now, let us quickly test how far away you are sitting.

        You might know that vision tests at a doctor's practice often involve chinrests; the doctor basically asks you to sit away from a screen in a specific distance. We do this here with a "virtual chinrest."

        1. Put your finger on the space bar.
        2. Close your right eye. It may be easier to cover your right eye with your palm.
        3. Using your left eye, focus on the fixation cross.
        4. Click anywhere on screen to start animating the red ball.

        The red ball will disappear as it moves from right to left. Press the space bar as soon as the ball disappears from sight.

        Please repeat five times. Keep your right eye closed and hit the space bar as fast you can!

        Click anywhere to continue.
    KeyboardComponent key_resp_3
      allowedKeys = 'return'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Instructions
    CodeComponent Inst_Code
      Code Type = Auto->JS
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      Begin Experiment:
        inst_ImageCount = 1
      Begin Routine:
        inst_ImagePath = "EXP_DATA/Instructions/Inst_Image/" + str(inst_ImageCount) + ".JPG"
      End Routine:
        inst_ImageCount = inst_ImageCount+1
    ImageComponent inst_Image
      image [set every repeat] = $inst_ImagePath
      saveStartStop = False
      size = (0.88, 0.66)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent Inst_key
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      syncScreenRefresh = False
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  Routine Init
    CodeComponent global_variables
      Code Type = Both
      Before Experiment:
        cardWidthMM = 85.6
        cardAspectRatio = 817 / 1284
        cardWidthPXMax = 900
      Before JS Experiment:
        window.cardWidthPX;
        window.px2mm;
        window.center = 900 * 0.5;
        window.dotX = [];
        window.cardAspectRatio = 817 / 1284;
        window.cardWidthPXMax = window.center * 2;
        window.cardWidthMM = 85.6;

        function rounder(value, decimals = 2) {
          return Number(Math.round(`${value}e${decimals}`) + `e-${decimals}`);
        }
  Routine Animation01
    MovieComponent Animation01_Video
      backend = moviepy
      forceEndRoutine = True
      loop = True
      movie = EXP_DATA\Instructions\Credit_Animation.mp4
      saveStartStop = False
      size = (0.9, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent Animation01_Key
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      syncScreenRefresh = False
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    TextComponent Animation01_text
      color = black
      letterHeight = 0.035
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 14
      text = לחץ על כל מקש להמשך
      units = height
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  Routine Animation02
    MovieComponent Animation01_Video_2
      backend = moviepy
      forceEndRoutine = True
      loop = True
      movie = EXP_DATA\Instructions\Dot_Gif.mp4
      saveStartStop = False
      size = (0.9, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent Animation01_Key_2
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      syncScreenRefresh = False
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    TextComponent Animation01_text_2
      color = black
      letterHeight = 0.035
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 3
      text = ךשמהל שקמ לכ לע ץחל
      units = height
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  Routine Exp_Instructions
    CodeComponent Inst_Code_2
      Code Type = Auto->JS
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      Begin Experiment:
        XP_ImageCount = 1
      Begin Routine:
        print("selected", selected)
        print("XP", XP)
        inst_ImagePath = "EXP_DATA/Instructions/" + selected + "/" + str(XP_ImageCount) + ".JPG"
        print("inst_ImagePath", inst_ImagePath)
      End Routine:
        XP_ImageCount = XP_ImageCount+1
    ImageComponent Xp_Inst_Image
      image [set every repeat] = $inst_ImagePath
      saveStartStop = False
      size = (0.88, 0.66)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine Random_Xp
    CodeComponent code_4
      Code Type = Both
      Begin Experiment:
        selected = "1, 2, 3"
        print("select", selected)
      Begin JS Experiment:
        selected = "1, 2, 3";
        console.log("select", selected);
      Begin JS Routine:
        /*
        1 = Large.Right
        2 = Large.left
        3 = Small.Right
        4 = Small.left*/

        if ((XP === 1)) {
            selected = "Large.Right";
            psychoJS.experiment.addData("Exp_Condition", selected);
        }
        if ((XP === 2)) {
            selected = "Large.Left";
            psychoJS.experiment.addData("Exp_Condition", selected);
        }
        if ((XP === 3)) {
            selected = "Small.Right";
            psychoJS.experiment.addData("Exp_Condition", selected);
        }
        if ((XP === 4)) {
            selected = "Small.Left";
            psychoJS.experiment.addData("Exp_Condition", selected);
        }
        console.log("selecte", selected);
        console.log("X", XP);
      Begin Routine:
        '''
        1 = Large.Right
        2 = Large.left
        3 = Small.Right
        4 = Small.left
        '''


        if XP == 1:
           selected = "Large.Right"
           thisExp.addData('Exp_Condition', selected)

        if XP == 2:
           selected = "Large.Left"
           thisExp.addData('Exp_Condition', selected)

        if XP == 3:
           selected = "Small.Right"
           thisExp.addData('Exp_Condition', selected)

        if XP == 4:
           selected = "Small.Left"
           thisExp.addData('Exp_Condition', selected)

        print("selecte", selected)
        print("X", XP)
  Routine XP_4
    CodeComponent XP_Name
      Code Type = Auto->JS
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      Begin Routine:
        XP = 4
        '''
        1 = Large.Right
        2 = Large.Left
        3 = Small.Right
        4 = Small.Left
        '''
  Routine Clear_Xp_Rounder
    CodeComponent Clear_S_lsit
      Code Type = Auto->JS
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      Begin Routine:
        XP_ImageCount = 1
  Routine XP_3
    CodeComponent XP_Name_2
      Code Type = Both
      Begin JS Experiment:
        var XP;
      Begin JS Routine:
        XP = 3;
        /*
        1 = Large.Right
        2 = Large.Left
        3 = Small.Right
        4 = Small.Left*/
      Begin Routine:
        XP = 3
        '''
        1 = Large.Right
        2 = Large.Left
        3 = Small.Right
        4 = Small.Left
        '''
  Routine ISI
    TextComponent ISI_TEXT
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Count_Side
    CodeComponent code_3
      Code Type = Both
      Begin JS Routine:
        mouse_click_locations = [];
        Pressed = [];
      Begin Routine:
        mouse_click_locations = []
        Pressed = []
      Each Frame:
        # Record mouse position if a key is pressed
        if mouse.isPressedIn(Cir1):
            Cir1.setColor([0.0000, 0.0000, 0.0000])


        if mouse.isPressedIn(Cir2):
            Cir2.setColor([0.0000, 0.0000, 0.0000])


        if mouse.isPressedIn(Cir3):
            Cir3.setColor([0.0000, 0.0000, 0.0000])


        if mouse.isPressedIn(Cir4):
            Cir4.setColor([0.0000, 0.0000, 0.0000])


        if len(mouse_click_locations) < 4:
            if any(mouse.getPressed()):  # Any button pressed, no matter which
                mouse_click_locations.append(mouse.getPos())
            # Wait until all buttons are released
            while any(mouse.getPressed()):
                pass

        if mouse.getPressed() > 0:
           mouse_click_locations.append(mouse.getPos())
        while mouse.getPressed() > 0:
           pass
      Each JS Frame:
        if (mouse.isPressedIn(Cir1)) {
            Cir1.setColor([0.0, 0.0, 0.0]);
        }
        if (mouse.isPressedIn(Cir2)) {
            Cir2.setColor([0.0, 0.0, 0.0]);
        }
        if (mouse.isPressedIn(Cir3)) {
            Cir3.setColor([0.0, 0.0, 0.0]);
        }
        if (mouse.isPressedIn(Cir4)) {
            Cir4.setColor([0.0, 0.0, 0.0]);
        }
        if ((mouse_click_locations.length < 4)) {
            if ((mouse.getPressed() > 0)) {
                mouse_click_locations.push(mouse.getPos());
            }
            while ((mouse.getPressed() > 0)) {
            }
        }
      End JS Routine:
        Counting = "";
        if ((mouse_click_locations.slice((- 1))[0][0] > mouse_click_locations[0][0])) {
            Counting = "Left_To_Right";
        }
        if ((mouse_click_locations.slice((- 1))[0][0] < mouse_click_locations[0][0])) {
            Counting = "Right_To_Left";
        }
        console.log(Counting);
      End Routine:
        Counting = ''

        if mouse_click_locations[-1][0] > mouse_click_locations[0][0]:
            Counting = 'Left_To_Right'
        if mouse_click_locations[-1][0] < mouse_click_locations[0][0]:
            Counting = 'Right_To_Left'

        print(Counting)
    PolygonComponent Cir1
      fillColor = white
      pos = (-0.45, 0)
      shape = custom polygon...
      size = 0.15
      startVal [time (s)] = 0.0
      units = height
      vertices = 100
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    PolygonComponent Cir2
      fillColor = white
      pos = (-0.225, 0)
      shape = custom polygon...
      size = 0.15
      startVal [time (s)] = 0.0
      units = height
      vertices = 100
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    PolygonComponent Cir3
      fillColor = white
      pos = (0.225, 0)
      shape = custom polygon...
      size = 0.15
      startVal [time (s)] = 0.0
      units = height
      vertices = 100
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    PolygonComponent Cir4
      fillColor = white
      pos = (0.45, 0)
      shape = custom polygon...
      size = 0.15
      startVal [time (s)] = 0.0
      units = height
      vertices = 100
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    MouseComponent mouse
      clickable = cir1, cir2, cir3, cir4
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Fixation
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      text = +
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    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Init_Counter
    CodeComponent code_5
      Code Type = Both
      Before Experiment:
        def split(word):
            return list(word)
      Before JS Experiment:
                // add-on: list(s: string): string[]
                function list(s) {
                    // if s is a string, we return a list of its characters
                    if (typeof s === 'string')
                        return s.split('');
                    else
                        // otherwise we return s:
                        return s;
                }

                function split(word) {
            return list(word);
        }
      Begin JS Routine:
        G_Condition = expInfo["Group"];
        e_LIST = split(G_Condition);
        C1 = e_LIST[0];
        C2 = e_LIST[1];
        C3 = e_LIST[2];
        C4 = e_LIST[3];
        con1 = (("EXP_DATA/Conditions/SNA/con" + C1) + ".xlsx");
        con2 = (("EXP_DATA/Conditions/SNA/con" + C2) + ".xlsx");
        con3 = (("EXP_DATA/Conditions/SNA/con" + C3) + ".xlsx");
        con4 = (("EXP_DATA/Conditions/SNA/con" + C4) + ".xlsx");
        console.log("e_LIST:", e_LIST);
      Begin Routine:
        G_Condition = (expInfo['Group'])
        e_LIST = split(G_Condition)
        C1 = e_LIST[0]
        C2 = e_LIST[1]
        C3 = e_LIST[2]
        C4 = e_LIST[3]

        con1 = 'EXP_DATA\Conditions\SNA\Con' + C1 + '.xlsx'
        con2 = 'EXP_DATA\Conditions\SNA\Con' + C2 + '.xlsx'
        con3 = 'EXP_DATA\Conditions\SNA\Con' + C3 + '.xlsx'
        con4 = 'EXP_DATA\Conditions\SNA\Con' + C4 + '.xlsx'

        print('e_LIST:', e_LIST)
  Routine First_Con
    TextComponent Fixation__2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent Number_2
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.3
      text [set every repeat] = $Num
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    TextComponent Blank_2
      letterHeight = 0.1
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.5
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    KeyboardComponent C_Response_2
      allowedKeys = 'l', 'a'
      correctAns = CorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.3
      storeCorrect = True
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    KeyboardComponent UC_Response_2
      allowedKeys = 'l', 'a'
      correctAns = UnCorrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.3
      storeCorrect = True
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  Routine Condition
    TextComponent Fixation_
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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    ImageComponent image
      image [set every repeat] = $Arrow_Image
      ori [set every repeat] = image_ori
      size [set every repeat] = (0.055*image_size, 0.037*image_size)
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 2
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    TextComponent text_
      letterHeight = 0.07
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 2
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      text [set every repeat]:
        $text_stimulus
    KeyboardComponent C_Response
      allowedKeys = 'space'
      correctAns = $CorrAns
      durationEstim = 3.5
      forceEndRoutine = True
      startVal [time (s)] = 1.25
      stopVal [duration (s)] = 2
      storeCorrect = True
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    KeyboardComponent Debug_Key
      allowedKeys = 'space', 'return'
      correctAns = $CorrAns
      disabled = True
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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    CodeComponent code_12
      Code Type = Both
      Begin Experiment:
        Arrow_Image = "EXP_DATA\Arrows\Cutout.png"
      Begin JS Experiment:
        Arrow_Image = "EXP_DATA/Arrows/Cutout.png";
      Begin JS Routine:
        if ((Stim === "ArrLC")) {
            Arrow_Image = "EXP_DATA/Arrows/Cutout.png";
        }
        if ((Stim === "ArrLF")) {
            Arrow_Image = "EXP_DATA/Arrows/Full.png";
        }
        if ((Stim === "ArrRC")) {
            Arrow_Image = "EXP_DATA/Arrows/Cutout.png";
        }
        if ((Stim === "ArrRF")) {
            Arrow_Image = "EXP_DATA/Arrows/Full.png";
        }
        console.log("Stim", Stim)
      Begin Routine:
        if Stim == 'ArrLC':
           Arrow_Image = "EXP_DATA\Arrows\Cutout.png"
        if Stim == 'ArrLF':
           Arrow_Image = "EXP_DATA\Arrows\Full.png"
        if Stim == 'ArrRC':
           Arrow_Image = "EXP_DATA\Arrows\Cutout.png"
        if Stim == 'ArrRF':
           Arrow_Image = "EXP_DATA\Arrows\Full.png"
      End JS Routine:
        psychoJS.experiment.addData("condition", CON);

        // was no response the correct answer?!
        if (C_Response.keys === undefined) {
          if (['None','none',undefined].includes(CorrAns)) {
             C_Response.corr = 1;  // correct non-response
          } else {
             C_Response.corr = 0;  // failed to respond (incorrectly)
          }
        }


        Feedback_Color = "green";
        Feedback = "";
        if (((GNG_Type === "go") && (C_Response.corr === 1))) {
            Feedback = "נכון";
        }
        if (((GNG_Type === "no_go") && (C_Response.corr === 1))) {
            Feedback = "נכון";
        }
        if (((GNG_Type === "go") && (C_Response.corr === 0))) {
            Feedback = "לא נכון";
            Feedback_Color = "red";
        }
        if (((GNG_Type === "no_go") && (C_Response.corr === 0))) {
            Feedback = "לא נכון";
            Feedback_Color = "red";
        }
        console.log("GNG_Type", GNG_Type)
      End Routine:
        thisExp.addData('condition',CON)
        #(0.075*image_size, 0.05*image_size)

        # Key resp is correct?
        if C_Response.keys in ['', [], None]:  # No response was made
            C_Response.keys = None
            # was no response the correct answer?!
            if str(CorrAns).lower() == 'none':
               C_Response.corr = 1;  # correct non-response
            else:
               C_Response.corr = 0;  # failed to respond (incorrectly)



        #Feedback

        Feedback_Color = 'green'
        Feedback = ''

        if GNG_Type == 'go' and C_Response.corr == 1:
           Feedback = "ןוכנ"
        if GNG_Type == 'no_go' and C_Response.corr == 1:
           Feedback = "ןוכנ"
        if GNG_Type == 'go' and C_Response.corr == 0:
           Feedback = "ןוכנ אל"
           Feedback_Color = 'red'
        if GNG_Type == 'no_go' and C_Response.corr == 0:
           Feedback = "ןוכנ אל"
           Feedback_Color = 'red'
  Routine Inst_counterbalance_check
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        if G_Condition == '2' and inst_ImageCount == 15:
            inst_ImageCount = 12
            continueRoutine = False
        elif G_Condition == '2' and inst_ImageCount == 12:
            inst_ImageCount = 15
        if G_Condition == '2' and inst_ImageCount == 13:
            inst_ImageCount = 10
  Routine Count_Side_
    CodeComponent code_7
      Code Type = Both
      Begin JS Routine:
        mouse_click_locations = [];
        Pressed = [];
      Begin Routine:
        mouse_click_locations = []
        Pressed = []
      Each Frame:
        # Record mouse position if a key is pressed
        if mouse.isPressedIn(Cir1):
            Cir1.setColor([0.0000, 0.0000, 0.0000])


        if mouse.isPressedIn(Cir2):
            Cir2.setColor([0.0000, 0.0000, 0.0000])


        if mouse.isPressedIn(Cir3):
            Cir3.setColor([0.0000, 0.0000, 0.0000])


        if mouse.isPressedIn(Cir4):
            Cir4.setColor([0.0000, 0.0000, 0.0000])


        if len(mouse_click_locations) < 4:
            if any(mouse.getPressed()):  # Any button pressed, no matter which
                mouse_click_locations.append(mouse.getPos())
            # Wait until all buttons are released
            while any(mouse.getPressed()):
                pass
      Each JS Frame:
        buttons = mouse.getPressed()
        if ((Cir1.contains(mouse) && (buttons === 1))) {
            Cir1.setColor([0.0, 0.0, 0.0]);
        }
        if ((Cir2.contains(mouse) && (buttons === 1))) {
            Cir2.setColor([0.0, 0.0, 0.0]);
        }
        if ((Cir3.contains(mouse) && (buttons === 1))) {
            Cir3.setColor([0.0, 0.0, 0.0]);
        }
        if ((Cir4.contains(mouse) && (buttons === 1))) {
            Cir4.setColor([0.0, 0.0, 0.0]);
        }
        if ((mouse_click_locations.length < 4)) {
            if ((buttons === 1)) {
                mouse_click_locations.push(mouse.getPos());
            }
        }
      End JS Routine:
        Counting = "";
        if ((mouse_click_locations.slice((- 1))[0][0] > mouse_click_locations[0][0])) {
            Counting = "Left_To_Right";
        }
        if ((mouse_click_locations.slice((- 1))[0][0] < mouse_click_locations[0][0])) {
            Counting = "Right_To_Left";
        }
        console.log(Counting);
      End Routine:
        Counting = ''

        if mouse_click_locations[-1][0] > mouse_click_locations[0][0]:
            Counting = 'Left_To_Right'
        if mouse_click_locations[-1][0] < mouse_click_locations[0][0]:
            Counting = 'Right_To_Left'

        print(Counting)
    PolygonComponent Cir1_2
      fillColor = white
      pos = (-0.675, 0)
      shape = custom polygon...
      size = 0.3
      startVal [time (s)] = 0.0
      units = height
      vertices = 100
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    PolygonComponent Cir2_2
      fillColor = white
      pos = (-0.225, 0)
      shape = custom polygon...
      size = 0.3
      startVal [time (s)] = 0.0
      units = height
      vertices = 100
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    PolygonComponent Cir3_2
      fillColor = white
      pos = (0.225, 0)
      shape = custom polygon...
      size = 0.3
      startVal [time (s)] = 0.0
      units = height
      vertices = 100
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    PolygonComponent Cir4_2
      fillColor = white
      pos = (0.675, 0)
      shape = custom polygon...
      size = 0.3
      startVal [time (s)] = 0.0
      units = height
      vertices = 100
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    MouseComponent mouse_2
      clickable = cir1, cir2, cir3, cir4
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Auto->JS
      disabled = True
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      Each Frame:
        if Cir1.contains(mouse) and mouse.getPressed() == 1:
           Cir1.setColor([0.0000, 0.0000, 0.0000])

        if Cir2.contains(mouse) and mouse.getPressed() == 1:
           Cir2.setColor([0.0000, 0.0000, 0.0000])

        if Cir3.contains(mouse) and mouse.getPressed() == 1:
           Cir3.setColor([0.0000, 0.0000, 0.0000])

        if Cir4.contains(mouse) and mouse.getPressed() == 1:
           Cir4.setColor([0.0000, 0.0000, 0.0000])

        if len(mouse_click_locations) < 4:
           if mouse.getPressed() == 1:
              mouse_click_locations.append(mouse.getPos())
  Routine _Count_Side
    CodeComponent code_9
      Code Type = Both
      disabled = True
      Begin JS Routine:
        mouse_click_locations = [];
        Pressed = [];
      Begin Routine:
        mouse_click_locations = []
        Pressed = []
      Each Frame:
        # Record mouse position if a key is pressed
        if mouse.isPressedIn(Cir1):
            Cir1.setColor([0.0000, 0.0000, 0.0000])


        if mouse.isPressedIn(Cir2):
            Cir2.setColor([0.0000, 0.0000, 0.0000])


        if mouse.isPressedIn(Cir3):
            Cir3.setColor([0.0000, 0.0000, 0.0000])


        if mouse.isPressedIn(Cir4):
            Cir4.setColor([0.0000, 0.0000, 0.0000])


        if len(mouse_click_locations) < 4:
            if any(mouse.getPressed()):  # Any button pressed, no matter which
                mouse_click_locations.append(mouse.getPos())
            # Wait until all buttons are released
            while any(mouse.getPressed()):
                pass
      Each JS Frame:
        buttons = mouse.getPressed()
        if ((Cir1.contains(mouse) && (buttons === 1))) {
            Cir1.setColor([0.0, 0.0, 0.0]);
        }
        if ((Cir2.contains(mouse) && (buttons === 1))) {
            Cir2.setColor([0.0, 0.0, 0.0]);
        }
        if ((Cir3.contains(mouse) && (buttons === 1))) {
            Cir3.setColor([0.0, 0.0, 0.0]);
        }
        if ((Cir4.contains(mouse) && (buttons === 1))) {
            Cir4.setColor([0.0, 0.0, 0.0]);
        }
        if ((mouse_click_locations.length < 4)) {
            if ((buttons === 1)) {
                mouse_click_locations.push(mouse.getPos());
            }
        }
      End JS Routine:
        Counting = "";
        if ((mouse_click_locations.slice((- 1))[0][0] > mouse_click_locations[0][0])) {
            Counting = "Left_To_Right";
        }
        if ((mouse_click_locations.slice((- 1))[0][0] < mouse_click_locations[0][0])) {
            Counting = "Right_To_Left";
        }
        console.log(Counting);
      End Routine:
        Counting = ''

        if mouse_click_locations[-1][0] > mouse_click_locations[0][0]:
            Counting = 'Left_To_Right'
        if mouse_click_locations[-1][0] < mouse_click_locations[0][0]:
            Counting = 'Right_To_Left'

        print(Counting)
    PolygonComponent Cir1_3
      fillColor = white
      nVertices = 100
      opacity [set every frame] = OP_Cir1
      pos = (-0.675, 0)
      shape = regular polygon...
      size = 0.3
      startVal [time (s)] = 0.0
      units = height
      vertices = 100
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    PolygonComponent Cir2_3
      fillColor = white
      nVertices = 100
      opacity [set every frame] = OP_Cir2
      pos = (-0.225, 0)
      shape = regular polygon...
      size = 0.3
      startVal [time (s)] = 0.0
      units = height
      vertices = 100
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    PolygonComponent Cir3_3
      fillColor = white
      nVertices = 100
      opacity [set every frame] = OP_Cir3
      pos = (0.225, 0)
      shape = regular polygon...
      size = 0.3
      startVal [time (s)] = 0.0
      units = height
      vertices = 100
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    PolygonComponent Cir4_3
      fillColor = white
      nVertices = 100
      opacity [set every frame] = OP_Cir4
      pos = (0.675, 0)
      shape = regular polygon...
      size = 0.3
      startVal [time (s)] = 0.0
      units = height
      vertices = 100
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    MouseComponent mouse_3
      clickable = cir1, cir2, cir3, cir4
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_8
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Experiment:
        mouse_click_locations = []
      Begin Routine:
        OP_Cir1 = 1
        OP_Cir2 = 2
        OP_Cir3 = 3
        OP_Cir4 = 4

        fini_text = ''
      Each Frame:
        buttons = mouse_3.getPressed()

        if Cir1_3.contains(mouse_3) and buttons[0]>0:
           OP_Cir1 = 0

        if Cir2_3.contains(mouse_3) and buttons[0]>0:
           OP_Cir2 = 0

        if Cir3_3.contains(mouse_3) and buttons[0]>0:
           OP_Cir3 = 0

        if Cir4_3.contains(mouse_3) and buttons[0]>0:
           OP_Cir4 = 0

        if buttons[0]>0:
           Posi = mouse_3.getPos()
           mouse_click_locations.append(Posi)
           print(Posi)
           print(mouse_click_locations)

        if OP_Cir1 == 0 and OP_Cir2 == 0 and OP_Cir3 == 0 and OP_Cir4 == 0:
           fini_text = 'לחץ על כל מקש לסיום'
      End Routine:
        Counting = ''

        if mouse_click_locations[-1][0] > mouse_click_locations[0][0]:
            Counting = 'Left_To_Right'
        if mouse_click_locations[-1][0] < mouse_click_locations[0][0]:
            Counting = 'Right_To_Left'

        thisExp.addData('Counting',Counting)
    TextComponent Fini_text
      color = black
      letterHeight = 0.035
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every frame] = $fini_text
      units = height
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  Routine Block_iNTS
    CodeComponent Inst_Code_3
      Code Type = Auto->JS
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      Begin Experiment:
        Block_n = 1
        Inst_n = 1
      Begin Routine:
        if Inst_n == 4:
           Block_n = Block_n+1
           Inst_n = 1

        if Block_n == 1:
           CON = C1
        if Block_n == 2:
           CON = C2
        if Block_n == 3:
           CON = C3
        if Block_n == 4:
           CON = C4

        Phase_ImagePath = 'EXP_DATA/Instructions/Inst_Image/' + CON + '/' + str(Inst_n) + '.JPG'

        print('Phase_ImagePath', Phase_ImagePath)
      End Routine:
        Inst_n = Inst_n+1
    ImageComponent inst_Image_2
      image [set every repeat] = $Phase_ImagePath
      saveStartStop = False
      size = (0.88, 0.66)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent Inst_key_2
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      syncScreenRefresh = False
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  Routine Blank_3
    TextComponent Blank_
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent text_4
      color [set every repeat] = $Feedback_Color
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
      text [set every repeat] = $Feedback
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    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 0.5
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Flow
  Routine Init
  LoopInitiator Inst_Loop01 loopType="TrialHandler"
    loopType = sequential
    nReps = 6
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    Routine Instructions
  LoopTerminator Inst_Loop01
  Routine Animation01
  Routine Instructions
  Routine estimate_screen_size
  Routine Results
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine Instructions
  LoopTerminator trials
  Routine Init_Counter
  Routine Block_iNTS
  LoopInitiator Practice_First_Con loopType="TrialHandler"
    conditionsFile = $con1
    loopType = random
    nReps = 1
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    Routine Condition
    Routine Blank_3
  LoopTerminator Practice_First_Con
  Routine Block_iNTS
  LoopInitiator First_Cond loopType="TrialHandler"
    conditionsFile = $con1
    loopType = random
    nReps = 8
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    Routine Condition
  LoopTerminator First_Cond
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine Block_iNTS
  LoopTerminator trials_2
  LoopInitiator Practice_second_Con loopType="TrialHandler"
    conditionsFile = $con2
    loopType = random
    nReps = 1
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    Routine Condition
    Routine Blank_3
  LoopTerminator Practice_second_Con
  Routine Block_iNTS
  LoopInitiator Second_Con loopType="TrialHandler"
    conditionsFile = $con2
    loopType = random
    nReps = 8
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    Routine Condition
  LoopTerminator Second_Con
  LoopInitiator trials_7 loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine Block_iNTS
  LoopTerminator trials_7
  LoopInitiator Practice_Third_Con loopType="TrialHandler"
    conditionsFile = $con3
    loopType = random
    nReps = 1
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    Routine Condition
    Routine Blank_3
  LoopTerminator Practice_Third_Con
  Routine Block_iNTS
  LoopInitiator Third_Con loopType="TrialHandler"
    conditionsFile = $con3
    loopType = random
    nReps = 8
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    Routine Condition
  LoopTerminator Third_Con
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine Block_iNTS
  LoopTerminator trials_3
  LoopInitiator Practice_Forth_Con loopType="TrialHandler"
    conditionsFile = $con4
    loopType = random
    nReps = 1
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    Routine Condition
    Routine Blank_3
  LoopTerminator Practice_Forth_Con
  Routine Block_iNTS
  LoopInitiator Forth_Con loopType="TrialHandler"
    conditionsFile = $con4
    loopType = random
    nReps = 8
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    Routine Condition
  LoopTerminator Forth_Con
  Routine Block_iNTS
  Routine Instructions
  Routine _Count_Side
  Routine Instructions
